PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['numbers_column.xlsx']
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = dg_noaudio
  exportHTML = on Save
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine consent
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    TextComponent text
      draggable = True
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Consent Form for Participation in Research
        Study Title: Lifespan Language and Learning
        Principal Investigator: Erik Thiessen, Ph.D.
        Department of Psychology
        5000 Forbes Ave.
        Pittsburgh, PA 15213
        412-268-6747 thiessen@andrew.cmu.edu
        Sponsors: National Science Foundation and The Esther A. and Joseph Klingenstein Fund

        Purpose of this Study
        The purpose of the study is to investigate how humans learn language.

        Procedures
        You will be asked to view visual stimuli (numbers) and respond using a keyboard. There may also be some executive function tasks, as well as a questionnaire about your language background and demographics. The entire experiment will take less than thirty minutes.

        Participant Requirements
        The requirement for participant inclusion in this study is adults 18 years and older.

        Risks
        The risks and discomfort associated with participation in this study are no greater than those ordinarily encountered in daily life or during the performance of routine physical or psychological examinations or tests.

        Benefits
        You will receive the benefit of learning more about how humans learn about language psychology, as will be described to you following the experimental session. Other than this knowledge, the experiment will be of no direct benefit to you.


        Compensation & Costs
        You will receive course credit for your participation in the study; it will count as one of the three experiments you are required to take for your course. If, for any reason, you do not complete the study, you will still receive course credit.

        There will be no cost to you if you participate in this study.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        text.setAlignHoriz(‘left’)
  Routine practice
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    TextComponent practicenumbers
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prac_numbers
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    KeyboardComponent practicenumbers_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      store = all keys
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  Routine monitor
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    TextComponent monitornumbers
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $numbers
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    KeyboardComponent monitornumbers_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      store = all keys
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  Routine end_task
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        bye b
    KeyboardComponent key_resp_7
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions1
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will be pressing number keys 1-9 as they appear on screen. You will be asked to only type when certain numbers appear on screen.

        For your test, you will monitor numbers:

        3,4,5,7,8,9

        Please place your fingers on the keys.

        We'll go through a practice section slowly.
        Press space to start.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = JS
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      Begin JS Experiment:
        text_2.setAlignHoriz(‘left’)
  Routine instructions2
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Numbers will appear on screen and you should press the corresponding number key as quickly as you can. These numbers will be presented faster.

        For your test, you will monitor numbers:

        3,4,5,7,8,9

        Please place your fingers on the keys.

        Do your best! Good luck!
        Press space to begin.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome
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    TextComponent welcome_words
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!
        Please enter full screen for this experiment.
        (press space to continue)
    KeyboardComponent cont_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome2
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    TextComponent instruction_preconsent
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be asked to complete a series of executive function tasks as well as a questionnaire about the languages you speak, and your musical and demographic background.

        This experiment will be fully online.

        Please read the following consent form. If you do not consent to the experiment, then you will not be able to participate.
    KeyboardComponent cont_space2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent2
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    TextComponent text_5
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Confidentiality
        By participating in the study, you understand and agree that Carnegie Mellon may be required to disclose your consent form, data and other personally identifiable information as required by law, regulation, subpoena or court order. Otherwise, your confidentiality will be maintained in the following manner:

        Your data and consent form will be kept separate. Your research data will be stored in a secure location on Carnegie Mellon property. Sharing of data with other researchers will only be done in such a manner that you will not be identified. By participating, you understand and agree that the data and information gathered during this study may be used by Carnegie Mellon and published and/or disclosed by Carnegie Mellon to others outside of Carnegie Mellon. However, your name, address, contact information and other direct personal identifiers will not be mentioned in any such publication or dissemination of the research data and/or results by Carnegie Mellon. Note that per regulation all research data must be kept for a minimum of 3 years.

        The researchers will take the following steps to protect participants’ identities during this study: (1) Each participant will be assigned a number; (2) The researchers will record any data collected during the study by number, not by name; (3) Any original recordings or data files will be stored in a secured location accessed only by authorized researchers.

        Rights
        Your participation is voluntary. You are free to stop your participation at any point. Refusal to participate or withdrawal of your consent or discontinued participation in the study will not result in any penalty or loss of benefits or rights to which you might otherwise be entitled. The Principal Investigator may at his/her discretion remove you from the study for any of a number of reasons. In such an event, you will not suffer any penalty or loss of benefits or rights which you might otherwise be entitled.

        Right to Ask Questions & Contact Information
        If you have any questions about this study, you should feel free to ask them now. If you have questions later, desire additional information, or wish to withdraw your participation please contact the Principal Investigator by mail, phone or e-mail in accordance with the contact information listed on the first page of this consent.
        If you have questions pertaining to your rights as a research participant; or to report concerns to this study, you should contact the Office of Research Integrity and Compliance at Carnegie Mellon University.
        Email: irb-review@andrew.cmu.edu
        Phone: 412-268-4721.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = JS
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      Begin JS Experiment:
        text_5.setAlignHoriz(‘left’)
  Routine procedureparticipants
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    TextComponent CONFIDENTIALITY
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        text.setAlignText('left')
  Routine riskbenefit
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine compsconf
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    TextComponent consent_words_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Compensation & Costs
        You will receive course credit for your participation in the study; it will count as one of the three experiments you are required to take for your course. If, for any reason, you do not complete the study, you will still receive course credit.

        There will be no cost to you if you participate in this study.
        Confidentiality
        By participating in the study, you understand and agree that Carnegie Mellon may be required to disclose your consent form, data and other personally identifiable information as required by law, regulation, subpoena or court order. Otherwise, your confidentiality will be maintained in the following manner:

        Your data and consent form will be kept separate. Your research data will be stored in a secure location on Carnegie Mellon property. Sharing of data with other researchers will only be done in such a manner that you will not be identified. By participating, you understand and agree that the data and information gathered during this study may be used by Carnegie Mellon and published and/or disclosed by Carnegie Mellon to others outside of Carnegie Mellon. However, your name, address, contact information and other direct personal identifiers will not be mentioned in any such publication or dissemination of the research data and/or results by Carnegie Mellon. Note that per regulation all research data must be kept for a minimum of 3 years.

        The researchers will take the following steps to protect participants’ identities during this study: (1) Each participant will be assigned a number; (2) The researchers will record any data collected during the study by number, not by name; (3) Any original recordings or data files will be stored in a secured location accessed only by authorized researchers.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine conset3
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    TextComponent text_7
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Voluntary Participation
        Your participation in this research is voluntary. You may discontinue participation at any time during the research activity. You may print a copy of this consent form for your records.

        [ ] I am age 18 or older.
        [ ] I have read and understand the information above.
        [ ] I want to participate in this research and continue with the study.


        Please enter your 6-digit participant ID for the Carnegie Mellon University Psychology Research Requirement.
        This must be entered to ensure you receive credit.

        Press Y if all of the above is true. Otherwise, please press esc.
    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = JS
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      Begin JS Experiment:
        text_7.setAlignHoriz(‘left’)
  Routine blank
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    TextComponent blank_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine welcome
  Routine welcome2
  Routine consent
  Routine consent2
  Routine conset3
  Routine instructions1
  Routine blank
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:23
    conditionsFile = noaudio_numbers.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('prac_numbers', 1), ('numbers', 3)]),
      OrderedDict([('prac_numbers', 2), ('numbers', 7)]),
      OrderedDict([('prac_numbers', 3), ('numbers', 1)]),
      OrderedDict([('prac_numbers', 4), ('numbers', 8)]),
      OrderedDict([('prac_numbers', 5), ('numbers', 6)]),
      OrderedDict([('prac_numbers', 6), ('numbers', 4)]),
      OrderedDict([('prac_numbers', 7), ('numbers', 1)]),
      OrderedDict([('prac_numbers', 8), ('numbers', 8)]),
      OrderedDict([('prac_numbers', 9), ('numbers', 6)]),
      OrderedDict([('prac_numbers', 3), ('numbers', 4)]),
      OrderedDict([('prac_numbers', 4), ('numbers', 2)]),
      OrderedDict([('prac_numbers', 7), ('numbers', 5)]),
      OrderedDict([('prac_numbers', 3), ('numbers', 1)]),
      OrderedDict([('prac_numbers', 9), ('numbers', 8)]),
      OrderedDict([('prac_numbers', 3), ('numbers', 3)]),
      OrderedDict([('prac_numbers', 5), ('numbers', 7)]),
      OrderedDict([('prac_numbers', 7), ('numbers', 2)]),
      OrderedDict([('prac_numbers', 1), ('numbers', 9)]),
      OrderedDict([('prac_numbers', 2), ('numbers', 2)]),
      OrderedDict([('prac_numbers', 7), ('numbers', 5)]),
      OrderedDict([('prac_numbers', 8), ('numbers', 6)]),
      OrderedDict([('prac_numbers', 9), ('numbers', 4)]),
      OrderedDict([('prac_numbers', 2), ('numbers', 1)]),
      OrderedDict([('prac_numbers', 0), ('numbers', 8)]),
      OrderedDict([('prac_numbers', 0), ('numbers', 3)]),
      OrderedDict([('prac_numbers', 0), ('numbers', 7)]),
      OrderedDict([('prac_numbers', 0), ('numbers', 2)]),
      OrderedDict([('prac_numbers', 0), ('numbers', 5)]),
      OrderedDict([('prac_numbers', 0), ('numbers', 6)])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
    Routine practice
  LoopTerminator trials
  Routine instructions2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = noaudio_numbers.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine monitor
  LoopTerminator trials_2
  Routine end_task
